PsychoPy2experiment version="2021.1.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = libraryTutorialPsychoPy
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Routines
  Routine WelcomeScreen
    TextComponent textWelcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome COGS-Q 320 Students!

        PsychoPy Tutorial with Alexander and Jenna
    KeyboardComponent keyEndWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
    TextComponent textBlank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine StudyTrial
    KeyboardComponent keyStudyDemo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygonStudy
      fillColor [set every repeat] = $shapeColor
      nVertices = 100
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine studyTest
    PolygonComponent polygonTest
      fillColor [set every repeat] = $shapeColor
      nVertices = 100
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine beginTest
    TextComponent textBeginTest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press Space to Begin Test
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    KeyboardComponent spaceBeginTest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thankYou
    TextComponent textThanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for participating!
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Flow
  Routine WelcomeScreen
  Routine blank500
  LoopInitiator studyLoops loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = studyItems.xlsm
    loopType = random
    nReps = 1
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    conditions:
      [{'shapeColor': 'blue'},
      {'shapeColor': 'green'},
      {'shapeColor': 'red'},
      {'shapeColor': 'yellow'},
      {'shapeColor': 'black'},
      {'shapeColor': 'purple'},
      {'shapeColor': 'orange'},
      {'shapeColor': 'pink'}]
    Routine StudyTrial
    Routine blank500
  LoopTerminator studyLoops
  Routine beginTest
  Routine blank500
  LoopInitiator testLoops loopType="TrialHandler"
    conditionsFile = studyItems.xlsm
    loopType = random
    nReps = 1
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    conditions:
      [{'shapeColor': 'blue'},
      {'shapeColor': 'green'},
      {'shapeColor': 'red'},
      {'shapeColor': 'yellow'},
      {'shapeColor': 'black'},
      {'shapeColor': 'purple'},
      {'shapeColor': 'orange'},
      {'shapeColor': 'pink'}]
    Routine studyTest
    Routine blank500
  LoopTerminator testLoops
  Routine thankYou
